<PlusConfiguration version="2.3" PlusRevision="Plus-2.3.0.4367 - Win32">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="Replay in-plane insertion + Webcam Video" Description="InPlaneInsertion Recording + Webcam Video Stream" />
    
    <Device Id="WebcamDevice" Type="MmfVideo" FrameSize="640 480" VideoFormat="RGB24" CaptureDeviceId="0" AcquisitionRate="10">
        <DataSources>
            <DataSource Type="Video" Id="Webcam" PortUsImageOrientation="UN" ImageType="RGB_COLOR" />
        </DataSources>
        <OutputChannels>
            <OutputChannel Id="WebcamStream" VideoDataSourceId="Webcam" />
        </OutputChannels>
    </Device>
    
    <Device Id="WebcamCaptureDevice" Type="VirtualCapture" BaseFilename="WebcamRecording.mha" EnableCapturingOnStart="FALSE">
        <InputChannels>
            <InputChannel Id="WebcamStream" />
        </InputChannels>
    </Device>

	<Device
      Id="TrackedVideoDevice"
      Type="SavedDataSource"
      SequenceFile="InPlaneInsertion20160521_214105.mha"
      UseData="IMAGE_AND_TRANSFORM"
      UseOriginalTimestamps="TRUE"
      ToolReferenceFrame="Tracker"
      RepeatEnabled="TRUE" >
      <DataSources>
        <DataSource Type="Video" Id="Video" BufferSize="100" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
	
    <Device Id="CaptureDevice" Type="VirtualDiscCapture" BaseFilename="Recording.mhd" EnableCapturingOnStart="FALSE" RequestedFrameRate="15">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>
    <Device Id="VolumeReconstructorDevice" Type="VirtualVolumeReconstructor" OutputVolDeviceName="Volume_Reference" EnableReconstruction="FALSE">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
      <VolumeReconstruction
        ImageCoordinateFrame="Image"
        ReferenceCoordinateFrame="Reference"
        CompoundingMode="MEAN"
        Interpolation="LINEAR"
        Optimization="FULL"
        NumberOfThreads="2"
        ClipRectangleOrigin="0 0"
        ClipRectangleSize="820 616"
        PixelRejectionThreshold="1"
        OutputSpacing="0.5 0.5 0.5"
        FillHoles="ON">
        <HoleFilling>
          <HoleFillingElement Type="GAUSSIAN" Size="5" Stdev="0.6667" MinimumKnownVoxelsRatio="0.50001" />
          <HoleFillingElement Type="STICK" StickLengthLimit="9" NumberOfSticksToUse="1" />
        </HoleFilling>
      </VolumeReconstruction>
    </Device>
  </DataCollection>
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18944" SendValidTransformsOnly="true" OutputChannelId="TrackedVideoStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="ProbeToReference" />
        <Transform Name="NeedleToReference" />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
       <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18945" SendValidTransformsOnly="true" OutputChannelId="WebcamStream">
        <DefaultClientInfo>
            <MessageTypes>
                <Message Type="IMAGE" />
            </MessageTypes>
            <ImageNames>
                <Image Name="Webcam" EmbeddedTransformToFrame="Reference">
				</Image>
            </ImageNames>
        </DefaultClientInfo>
    </PlusOpenIGTLinkServer>
  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
      Matrix="
        7.94406e-005	0.112793	0.00334399	48.3092
        -0.11284	5.6701e-005	0.000768125	41.0176
        0.000766107	-0.00334445	0.112791	21.5833
        0	0	0	1"
       Date="2015.10.27 14:06:18" />

       <Transform From="Webcam" To="Reference" Matrix="
          0.2 0.0 0.0 0.0
          0.0 0.2 0.0 0.0
          0.0 0.0 0.2 0.0
          0 0 0 1" />
  </CoordinateDefinitions>
</PlusConfiguration>
