<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="Telemed L12 50mm Ascension "
      Description="EM sensors: 1 Probe, 2 Needle, 3 Reference." 
    />

    <Device
      Id="TrackerDevice" 
      Type="Ascension3DG" 
      AcquisitionRate="50" 
      LocalTimeOffsetSec="0.0" 
      FilterAcWideNotch="1"
      FilterAlpha="1"
      FilterDcAdaptive="1"
      ToolReferenceFrame="Tracker">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" BufferSize="500" PortName="0" />
        <DataSource Type="Tool" Id="Needle" BufferSize="500" PortName="1" />
        <DataSource Type="Tool" Id="Reference" BufferSize="500" PortName="2" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Probe"/>
          <DataSource Id="Needle"/>
		  <DataSource Id="Reference"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDevice"
      Type="TelemedVideo"
      DepthMm="60">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MN" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="UltrasoundStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>

    <Device 
      Id="TrackedUltrasoundDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="UltrasoundStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedUltrasoundStream"/>
      </OutputChannels>
    </Device>

    <Device
      Id="TrackedUltrasoundCaptureDevice"
      Type="VirtualCapture"
      BaseFilename="Recording.mhd"
      EnableCapturingOnStart="FALSE"
      RequestedFrameRate="15" >
      <InputChannels>
        <InputChannel Id="TrackedUltrasoundStream" />
      </InputChannels>
    </Device>

  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackedUltrasoundStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="ProbeToReference" />
        <Transform Name="NeedleTipToProbe" />
        <xTransform Name="ImageToProbe" />
      </TransformNames>
      <ImageNames>
        <Image Name="Ultrasound" EmbeddedTransformToFrame="Ultrasound" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

  <CoordinateDefinitions>

    <!-- Probe calibration using needle-based method-->
	<Transform From="Image" To="Probe"
      Matrix="
		-0.0173897 -0.127695 0.0312299 116.788 
		-0.019588 -0.0286393 -0.127949 42.9406 
		0.129917 -0.0214102 -0.015111 -23.565 
		0 0 0 1 
	   "
       Date="2017.05.28 14:06:18" /> 
	   	<Transform From="NeedleTip" To="Needle"
      Matrix="
		-0.0839036 0.0384612 0.995731 166.232 
		-0.996469 -1.57655e-30 -0.0839657 -14.3022 
		-0.00322942 -0.99926 0.0383254 3.34938 
		0 0 0 1 
	   "
       Date="2017.05.28 14:06:18" /> 

	<!--
    <Transform From="Image" To="Probe"
      Matrix="
      0.000410423 0.0998385 0.000199054 49.993 
      -0.09982 0.0004142 -0.0019326 38.1277 
      -0.00193341 -0.000191071 0.0998206 21.8883 
      0 0 0 1  
      "
      Date="2015.10.27 14:06:18" /> 
	-->

  </CoordinateDefinitions> 

</PlusConfiguration>