<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Intel RealSense camera "
      Description="Broadcasting acquired RGB and Depth video through PlusServer from Intel RealSense 3D camera"
	/>
  
    <Device
      Id="VideoDevice"
      Type="IntelRealSense"
    >
      <DataSources>

        <DataSource
          Type="Video"
          Id="VideoRGB"
          DeviceSerialNumber="217222065147"
          FrameType="RGB"
          FrameSize="640 480"
          FrameRate="15"
          PortUsImageOrientation="UN"
        />

        <DataSource
          Type="Video"
          Id="VideoDEPTH"
          DeviceSerialNumber="217222065147"
          FrameType="DEPTH"
          FrameSize="640 480"
          FrameRate="15"
          AlignDepthStream="TRUE"
          UseRealSenseColorizer="TRUE"
          PortUsImageOrientation="UN"
        />

        <DataSource
          Type="Video"
          Id="Video1RGB"
          DeviceSerialNumber="220222064007"
          FrameType="RGB"
          FrameSize="640 480"
          FrameRate="15"
          PortUsImageOrientation="UN"
        />

        <DataSource
          Type="Video"
          Id="Video1DEPTH"
          DeviceSerialNumber="220222064007"
          FrameType="DEPTH"
          FrameSize="640 480"
          FrameRate="15"
          AlignDepthStream="TRUE"
          UseRealSenseColorizer="TRUE"
          PortUsImageOrientation="UN"
        />  
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStreamRGB" VideoDataSourceId="VideoRGB" />
        <OutputChannel Id="VideoStreamDEPTH" VideoDataSourceId="VideoDEPTH" />
		<OutputChannel Id="VideoStream1RGB" VideoDataSourceId="Video1RGB" />
        <OutputChannel Id="VideoStream1DEPTH" VideoDataSourceId="Video1DEPTH" />
      </OutputChannels>
    </Device>
  </DataCollection>
  
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18945" SendValidTransformsOnly="true" OutputChannelId="VideoStreamRGB">
        <DefaultClientInfo>
            <MessageTypes>
                <Message Type="VIDEO" />
            </MessageTypes>
            <VideoNames>
                <Video Name="ImageRGB" EmbeddedTransformToFrame="ImageRGB" EncodingLossless="False" >
				<Encoding
					FourCC="VP90"
					Lossless="False"
					Speed="8"
					DeadlineMode="realtime"
					RateControl="CQ" />
				</Video>
            </VideoNames>
        </DefaultClientInfo>
    </PlusOpenIGTLinkServer>
	
	<PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18948" SendValidTransformsOnly="true" OutputChannelId="VideoStreamDEPTH">
        <DefaultClientInfo>
            <MessageTypes>
                <Message Type="VIDEO" />
            </MessageTypes>
            <VideoNames>
                <Video Name="ImageDEPTH" EmbeddedTransformToFrame="ImageDEPTH" EncodingLossless="False" >
				<Encoding
					FourCC="VP90"
					Lossless="False"
					Speed="8"
					DeadlineMode="realtime"
					RateControl="CQ" />
				</Video>
            </VideoNames>
        </DefaultClientInfo>
    </PlusOpenIGTLinkServer> 
	
	<PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18949" SendValidTransformsOnly="true" OutputChannelId="VideoStream1RGB">
        <DefaultClientInfo>
            <MessageTypes>
                <Message Type="VIDEO" />
            </MessageTypes>
            <VideoNames>
                <Video Name="Image1RGB" EmbeddedTransformToFrame="Image1RGB" EncodingLossless="False" >
				<Encoding
					FourCC="VP90"
					Lossless="False"
					Speed="8"
					DeadlineMode="realtime"
					RateControl="CQ" />
				</Video>
            </VideoNames>
        </DefaultClientInfo>
    </PlusOpenIGTLinkServer>
	
	<PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18950" SendValidTransformsOnly="true" OutputChannelId="VideoStream1DEPTH">
        <DefaultClientInfo>
            <MessageTypes>
                <Message Type="VIDEO" />
            </MessageTypes>
            <VideoNames>
                <Video Name="Image1DEPTH" EmbeddedTransformToFrame="Image1DEPTH" EncodingLossless="False" >
				<Encoding
					FourCC="VP90"
					Lossless="False"
					Speed="8"
					DeadlineMode="realtime"
					RateControl="CQ" />
				</Video>
            </VideoNames>
        </DefaultClientInfo>
    </PlusOpenIGTLinkServer>

  <!--<PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18945"
    SendValidTransformsOnly="true"
    OutputChannelId="VideoStreamRGB" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="ImageRGB" EmbeddedTransformToFrame="ImageRGB" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18948"
    SendValidTransformsOnly="true"
    OutputChannelId="VideoStreamDEPTH" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="ImageDEPTH" EmbeddedTransformToFrame="ImageDEPTH" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18949"
    SendValidTransformsOnly="true"
    OutputChannelId="VideoStream1RGB" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image1RGB" EmbeddedTransformToFrame="Image1RGB" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18950"
    SendValidTransformsOnly="true"
    OutputChannelId="VideoStream1DEPTH" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image1DEPTH" EmbeddedTransformToFrame="Image1DEPTH" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>-->

</PlusConfiguration>
