<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="Telemed L12 60mm Ascension"
      Description="EM sensors: 1 Probe, 2 Reference, 3 Needle." 
    />

    <Device
      Id="TrackerDevice" 
      Type="Ascension3DG" 
      AcquisitionRate="10" 
      LocalTimeOffsetSec="0.0" 
      FilterAcWideNotch="1"
      ToolReferenceFrame="Tracker">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" BufferSize="500" PortName="0" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Needle" BufferSize="500" PortName="1" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Reference" BufferSize="500" PortName="2" AveragedItemsForFiltering="20" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Probe"/>
          <DataSource Id="Needle"/>
	      <DataSource Id="Reference"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDevice"
      Type="TelemedVideo"
      DepthMm="110">
      <DataSources>
        <DataSource
          Type="Video"
          Id="Video"
          PortUsImageOrientation="UN"
          />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>

    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>

    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="Recording.mhd"
      EnableCapturingOnStart="FALSE"
      RequestedFrameRate="15" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>

    <Device
      Id="VolumeReconstructorDevice"
      Type="VirtualVolumeReconstructor"
      OutputVolDeviceName="Volume_Reference"
      EnableReconstruction="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
      <VolumeReconstruction
        ImageCoordinateFrame="Image" ReferenceCoordinateFrame="Reference"
        CompoundingMode="MEAN" Interpolation="LINEAR"
        Optimization="FULL" NumberOfThreads="2"
        ClipRectangleOrigin="0 0" ClipRectangleSize="820 616" PixelRejectionThreshold="1"
        OutputSpacing="0.5 0.5 0.5"
        FillHoles="ON" >
        <HoleFilling>
          <HoleFillingElement Type="GAUSSIAN" Size="5" Stdev="0.6667" MinimumKnownVoxelsRatio="0.50001" />
          <HoleFillingElement Type="STICK" StickLengthLimit="9" NumberOfSticksToUse="1" />
        </HoleFilling>
      </VolumeReconstruction>
    </Device>

  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackedVideoStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="ProbeToReference" />
        <Transform Name="NeedleToReference" />
        <Transform Name="ImageToProbe" />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

  <CoordinateDefinitions>

    <!-- Probe calibration using needle-based method-->
    <Transform From="Image" To="Probe"
      Matrix="
		-0.00185924 -0.176288 -0.00697099 177.805 
		-0.0366905 0.00710989 -0.174772 40.9667 
		0.177069 -0.000377792 -0.0362878 -29.318 
		0 0 0 1 
         "
       Date="2015.10.27 14:06:18" /> 
	   

  </CoordinateDefinitions> 

</PlusConfiguration>