<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="Telemed L12 60mm Ascension - Calibration using pointer"
      Description="EM sensors: 1 Probe, 2 Reference, 3 Needle" 
    />

    <Device
      Id="TrackerDevice" 
      Type="Ascension3DG" 
      AcquisitionRate="50" 
      LocalTimeOffsetSec="0.0" 
      FilterAcWideNotch="1"
      ToolReferenceFrame="Tracker">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" BufferSize="500" PortName="0" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Reference" BufferSize="500" PortName="1" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Needle" BufferSize="500" PortName="2" AveragedItemsForFiltering="20" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Probe"/>
          <DataSource Id="Reference"/>
          <DataSource Id="Needle"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDevice"
      Type="TelemedVideo"
      DepthMm="60">
      <DataSources>
        <DataSource
          Type="Video"
          Id="Video"
          PortUsImageOrientation="UF"
          />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>

    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>
    
	<Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="Recording.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>
	
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackedVideoStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="NeedleToProbe" />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

  <CoordinateDefinitions>

  </CoordinateDefinitions> 
  
  
</PlusConfiguration>